PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Priming_gender
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine training_block_female
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    TextComponent MAN_2
      letterHeight = 0.1
      pos = (0.8, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = MAN
      units = norm
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    TextComponent WOMAN_2
      letterHeight = 0.1
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = WOMAN
      units = norm
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    TextboxComponent Fname
      bold = False
      editable = False
      font = Angsana New
      letterHeight = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Female
      units = norm
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    ImageComponent female_pic
      image = women.png
      pos = (-0.7, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent men_pic_2
      image = men.png
      pos = (0.7, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'j','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine priming_block
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        stimulus_name_started = False
        stimulus_name_ended = False

        stimulus_pic_started = False
        stimulus_pic_ended = False


        #win.callOnFlip(port.write, Trig.to_bytes(1,'little'))
        #win.callOnFlip(port.write, int(Trig).to_bytes(1, 'little'))
        win.callOnFlip(print, "Trial Trigger sent:", int(Trig))
        #block_start_time = globalClock.getTime()
        #if globalClock.getTime() - block_start_time >= 0.015:
        #       win.callOnFlip(port.write, b'\x00')
        #
      Each Frame:
        # send trigger to port, converting to bytes
        # acceptable trigger values are 1-255 (integer values)
        if name_2.status == STARTED and not stimulus_name_started:
        #    win.callOnFlip(port.write, str.encode(trig))
            win.callOnFlip(print, "Name Trigger sent:", int(NameTrig))
        #    win.callOnFlip(port.write, int(NameTrig).to_bytes(1,'little'))
            stimulus_name_start_time = globalClock.getTime()
            stimulus_name_started  = True

        if pic_2.status == STARTED and not stimulus_pic_started:
        #    win.callOnFlip(port.write, str.encode(trig))
            win.callOnFlip(print, "Pic Trigger sent:", int(ImageTrig))
        #    win.callOnFlip(port.write, int(ImageTrig).to_bytes(1,'little'))
            stimulus_pic_start_time = globalClock.getTime()
            stimulus_pic_started  = True

        ## #set port back to zero after 15 ms
        #if stimulus_name_started and not stimulus_name_ended:
        #        if globalClock.getTime() - stimulus_name_start_time >= 0.015:
        #            win.callOnFlip(port.write, b'\x00')
        #            stimulus_name_ended = True
        #if stimulus_pic_started and not stimulus_pic_ended:
        #        if globalClock.getTime() - stimulus_pic_start_time >= 0.015:
        #            win.callOnFlip(port.write, b'\x00')
        #            stimulus_pic_ended = True
    TextComponent MAN_3
      letterHeight = 0.1
      pos = (0.8, 0.8)
      startVal [time (s)] = 0.0
      text = MAN
      units = norm
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    TextComponent MAN_3_desc
      letterHeight = 0.06
      pos = (0.8, 0.7)
      startVal [time (s)] = 0.0
      text = Press the k key
      units = norm
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    TextComponent WOMAN_3
      letterHeight = 0.1
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      text = WOMAN
      units = norm
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    TextComponent WOMAN_3_desc
      letterHeight = 0.06
      pos = (-0.8, 0.7)
      startVal [time (s)] = 0.0
      text = Press the j key
      units = norm
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    TextboxComponent name_2
      bold = False
      editable = False
      font = Angsana New
      letterHeight = 0.5
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = norm
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      text [set every repeat]:
        $NamePriming
    ImageComponent pic_2
      image [set every repeat] = $ImagePriming
      pos = (0.0, 0.0)
      size = (1.2, 1.2)
      startVal [time (s)] = 0.3
      units = norm
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'j','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training_block
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    TextComponent MAN
      letterHeight = 0.1
      pos = (0.8, 0.8)
      startVal [time (s)] = 0.0
      text = MAN
      units = norm
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    TextComponent WOMAN
      letterHeight = 0.1
      pos = (-0.8, 0.8)
      startVal [time (s)] = 0.0
      text = WOMAN
      units = norm
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    PolygonComponent fixation
      draggable = True
      fillColor = 1.0000, 1.0000, 1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent pic
      image [set every repeat] = $Image
      pos = (0.0, 0.0)
      size = (1.2, 1.2)
      startVal [time (s)] = 0.3
      units = norm
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'j','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent error_feedback
      fillColor = red
      lineColor = red
      ori = 45
      shape = cross
      size = (0.5, 0.5)
      units = norm
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    CodeComponent code
      Code Type = Py
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      Each Frame:
        # Only show feedback if a key has been pressed
        if key_resp.keys:  # keyResp is your Keyboard component
            # Determine the correct key based on the image
            if "men.png" in pic.image:  # imageStim is your Image component
                correctKey = 'k'
            elif "women.png" in pic.image:
                correctKey = 'j'

            # Show cross if wrong
            if key_resp.keys[0] != correctKey:
                error_feedback.setAutoDraw(True)
            else:
                error_feedback.setAutoDraw(False)
  CounterbalanceRoutine counterbalance
    endExperimentOnDepletion = ignore
    nGroups = 2
    nReps = 1
    nSlots = 10
    saveData = True
    saveRemaining = True
    specMode = uniform
  Routine feedback_training
    RoutineSettingsComponent feedback_training
      stopVal [duration (s)] = 0.5
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    PolygonComponent errorCross
      fillColor = red
      lineColor = red
      ori = 45
      shape = cross
      size = (0.5, 0.5)
      units = norm
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    CodeComponent code_2
      Code Type = Py
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      Each Frame:
        # Only show feedback if a key has been pressed
        if key_resp.keys:  # keyResp is your Keyboard component
            # Determine the correct key based on the image
            if "men.png" in pic.image:  # imageStim is your Image component
                correctKey = 'j'
            elif "women.png" in pic.image:
                correctKey = 'k'

        # Show cross only if wrong
        if key_resp.keys != correctKey:

            errorCross.setAutoDraw(True)
        else:
            continueRoutine = False  # skip routine if correct
  Routine priming_instruction
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    ImageComponent instruction_slide_2
      draggable = True
      image = Instruction.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent instruction_continue_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training_Instruction
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    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        import serial
        #port = serial.Serial('COM4',115200)
        #
    ImageComponent instruction_slide
      draggable = True
      image = Instruction.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent instruction_continue
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ending
    RoutineSettingsComponent Ending
      stopVal [duration (s)] = 1
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    CodeComponent code_5
      Code Type = Auto->JS
      Begin Routine:
        #port.close()
Flow
  Routine training_Instruction
  LoopInitiator training loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = Training loop.csv
    loopType = fullRandom
    nReps = 20
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    conditions:
      [OrderedDict([('Male', 'กฤษณะ'), ('Female', 'กาญจนา'), ('Image', 'men.png'), ('Name', 'กฤษณะ'), ('ImagePriming', 'men.png'), ('NamePriming', 'กฤษณะ')]),
      OrderedDict([('Male', 'นเรศ'), ('Female', 'พิมพ์ใจ'), ('Image', 'women.png'), ('Name', 'นเรศ'), ('ImagePriming', 'men.png'), ('NamePriming', 'นเรศ')]),
      OrderedDict([('Male', 'ธนพล'), ('Female', 'วาสนา'), ('Image', None), ('Name', 'ธนพล'), ('ImagePriming', 'men.png'), ('NamePriming', 'ธนพล')]),
      OrderedDict([('Male', 'อรรถพล'), ('Female', 'สุพัตรา'), ('Image', None), ('Name', 'อรรถพล'), ('ImagePriming', 'men.png'), ('NamePriming', 'อรรถพล')]),
      OrderedDict([('Male', 'ชัยวัฒน์'), ('Female', 'ศิริพร'), ('Image', None), ('Name', 'ชัยวัฒน์'), ('ImagePriming', 'men.png'), ('NamePriming', 'ชัยวัฒน์')]),
      OrderedDict([('Male', 'ปริญญา'), ('Female', 'อาภรณ์'), ('Image', None), ('Name', 'ปริญญา'), ('ImagePriming', 'men.png'), ('NamePriming', 'ปริญญา')]),
      OrderedDict([('Male', 'ภูมิพัฒน์'), ('Female', 'จิตติมา'), ('Image', None), ('Name', 'ภูมิพัฒน์'), ('ImagePriming', 'men.png'), ('NamePriming', 'ภูมิพัฒน์')]),
      OrderedDict([('Male', 'วรพล'), ('Female', 'วรรณา'), ('Image', None), ('Name', 'วรพล'), ('ImagePriming', 'men.png'), ('NamePriming', 'วรพล')]),
      OrderedDict([('Male', 'ศักดิ์สิทธิ์'), ('Female', 'สุนิสา'), ('Image', None), ('Name', 'ศักดิ์สิทธิ์'), ('ImagePriming', 'men.png'), ('NamePriming', 'ศักดิ์สิทธิ์')])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
    Routine training_block
  LoopTerminator training
  Routine priming_instruction
  LoopInitiator priming loopType="TrialHandler"
    conditionsFile = Training loop.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('Male', 'กฤษณะ'), ('Female', 'กาญจนา'), ('Image', 'men.png'), ('Name', 'กฤษณะ'), ('ImagePriming', 'men.png'), ('NamePriming', 'กฤษณะ'), ('ImageTrig', np.int64(10)), ('NameTrig', np.int64(50)), ('Trig', np.int64(100))]),
      OrderedDict([('Male', 'นเรศ'), ('Female', 'พิมพ์ใจ'), ('Image', 'women.png'), ('Name', 'นเรศ'), ('ImagePriming', 'men.png'), ('NamePriming', 'นเรศ'), ('ImageTrig', np.int64(10)), ('NameTrig', np.int64(51)), ('Trig', np.int64(101))]),
      OrderedDict([('Male', 'ธนพล'), ('Female', 'วาสนา'), ('Image', None), ('Name', 'ธนพล'), ('ImagePriming', 'men.png'), ('NamePriming', 'ธนพล'), ('ImageTrig', np.int64(10)), ('NameTrig', np.int64(52)), ('Trig', np.int64(102))]),
      OrderedDict([('Male', 'อรรถพล'), ('Female', 'สุพัตรา'), ('Image', None), ('Name', 'อรรถพล'), ('ImagePriming', 'men.png'), ('NamePriming', 'อรรถพล'), ('ImageTrig', np.int64(10)), ('NameTrig', np.int64(53)), ('Trig', np.int64(103))]),
      OrderedDict([('Male', 'ชัยวัฒน์'), ('Female', 'ศิริพร'), ('Image', None), ('Name', 'ชัยวัฒน์'), ('ImagePriming', 'men.png'), ('NamePriming', 'ชัยวัฒน์'), ('ImageTrig', np.int64(10)), ('NameTrig', np.int64(54)), ('Trig', np.int64(104))]),
      OrderedDict([('Male', 'ปริญญา'), ('Female', 'อาภรณ์'), ('Image', None), ('Name', 'ปริญญา'), ('ImagePriming', 'men.png'), ('NamePriming', 'ปริญญา'), ('ImageTrig', np.int64(10)), ('NameTrig', np.int64(55)), ('Trig', np.int64(105))])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
    Routine priming_block
  LoopTerminator priming
  Routine Ending
